;HX2d
;$COMMENT=HETCOR with pmlg decoupling on 1H
;$CLASS=Solids-MAS
;$DIM=2D
;$TYPE=HETCOR
;$SUBTYPE=1-receiver

; Issues, suggestions?
; krmote [at] tifrh [dot] res [dot] in

;p1: H 90 pulse @ pl1
;p15: CP from H-->X
;p5: length of each phase of pmlg for m5m
;pl1: H 90 deg pulse  @ p1 us
;sp1: H PMLG during t1
;sp0: H, cp
;pl15: X, cp
;pl12: H, decoupling 
;d1: recycle delay
;d9: window duration for pmlg (optional)
;l0: indirect increment loop, initially set to zero
;l12: number of times the pmlg loop should be looped for each increment (1 or more)
;spnam0: linear ramp
;spnam1: pmlg m5m
;cpdprg12: 1H high power dec
;pl12: H decoupling RF


; #---channels
# define H f2
# define X f1

#include <Avancesolids.incl>

; #---pmlg settings
  define delay window
  "window = d9"
  "p10 = 10*p5"
	
; #---loop, cnsts, etc
  "l0 = 0" 

; #---for rCW-ApA 1H decoupling 
  "d31 = 1 / cnst31"
  "p31 = 0.98 * d31 - p32 / 2"

; #---default delays
  "d60 = 0.1u"
  "d61 = 0.5u"
  "d62 = 1.0u"
  "d63 = 10u"
  "d58 = 1m"

; #---pulse sequence starts

Pre, ze

Check, d63

if "p15 < 11m" goto PassCP
print "Check CP contact time"
goto HaltAcqu
PassCP, d63


Start, d1 

  d63 rpp10
  d63 pl1:H pl15:X

; #---initial 90 on 1H
  (p1 ph1):H

; #---1H evolution with pmlg 
4 (p10:sp1 ph10^):H
  window
  lo to 4 times l0

; #---short cp to X
  (p15:sp0 ph20):H (p15 ph2):X

; #---detect X with H-decoupling
  d60 pl12:H
  go=Check  ph31 cpds2:H finally do:H

; #---2D statement
  d58 wr #0 to Start F1PH(ip1, iu0*l12)


HaltAcqu, d63

exit

; #---phase table
; min=2, full=4
  ph1= 1 3 
  ph2= 0 0 2 2 
  ph10= 0 2
  ph31= 0 2 2 0

  ph20 = 0
  ph21 = 1
  ph22 = 2
  ph23 = 3 


